PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'Participant': '', 'Session': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save csv file = True
  Saved data folder = "~/Neurodata/Datasets/PsychoPy/Matching"
  Screen = 1
  Units = pix
  Window size (pixels) = [800,600]
  color = black
  expName = Matching
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Routines
  Routine instrPractice
    TextComponent instruct1
      letterHeight = 24
      startVal [time (s)] = 0.0
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      text:
        You are out in the lake fishing.

        Cast your fishing rod by pressing 'left' or 'right' arrows.

        After casting, if you think you are not catching anything, press 'spacebar' to cast again.

        Catch as many fish as you can before sunset!



        Press any key when you are ready to proceed.
    KeyboardComponent ok1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrMain
    TextComponent instr2
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        Remember, press;
         - 'S' if the SMALL letters are S
         - 'H' if the SMALL letters are H

        Try to respond as quickly and as accurately as possible.

        When you are ready to proceed press any key.
    KeyboardComponent ok2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code_feedback
      Code Type = Py
      Begin Experiment:
        img_fish = None
      Begin Routine:
        #msg=''

        #if key_resp.keys == 'space':
        #    feedbackDwell = 0
        #    img_fish = None
        #else:
        #    feedbackDwell = 1
        #    img_fish = np.random.choice(['fish_01.jpg','fish_02.jpg','fish_03.jpg'])
      Each Frame:
        timeLeft = max(0,sessDur-globalClock.getTime())
    ImageComponent fb_backdrop
      disabled = True
      image [set every repeat] = $backDrop
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDwell
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    ImageComponent fish
      image [set every repeat] = $img_fish
      size = (200,200)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDwell
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    TextComponent feedback_2
      letterHeight = 28
      pos = [0, 200]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDwell
      text [set every repeat] = FISH!
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    TextComponent feedback_header
      disabled = True
      letterHeight = 14
      pos = (-160, 480)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDwell
      text [set every frame] = $"FISH {} \t\t SUNSET IN {:02d}'{:02d}''".format(totalFish,int(timeLeft/60),int(timeLeft%60))
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  Routine thanks
    ImageComponent image_2
      image [set every repeat] = $backDrop
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    TextComponent thanksMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $"You caught {} fishes!".format(totalFish)
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  Routine varsBlock
    CodeComponent code_varsBlock
      Code Type = Py
      Begin Routine:
        leftHi = not(leftHi)

        pL = pHi if leftHi else pLo
        pR = pLo if leftHi else pHi
  Routine varsInit
    CodeComponent code_varsInit
      Code Type = Py
      Begin Experiment:
        baitL = True
        baitR = True
        pHi = 0.4
        pLo = 0.1
        leftHi = random() > 0.5
        feedbackDelayMin = 0.5
        feedbackDelayMax = 8
        feedbackDelayMean = 1.5
        totalFish = 0
        sessDur = 5*60
        timeLeft = sessDur
        backDrop = "lake_01.jpg"
      Begin Routine:
        globalClock.reset()
  Routine wait_Sin
    CodeComponent code_trial
      Code Type = Py
      Begin Experiment:
        from numpy.random import exponential as exprnd
      Begin Routine:
        corrAns = []
        baitL = baitL if baitL else random()<pL
        baitR = baitR if baitR else random()<pR
        boatOri = 0
        if baitL:
            corrAns.append('left')
        if baitR:
            corrAns.append('right')

        feedbackDelay = feedbackDelayMin - 1
        while (feedbackDelay < feedbackDelayMin) or (feedbackDelay > feedbackDelayMax):
            feedbackDelay = exprnd(feedbackDelayMean)
      Each Frame:
        timeLeft = max(0,sessDur-globalClock.getTime())
      End Routine:
        if resp.keys not in corrAns:#stored on last run routine
          feedbackDelay = 60*60
    KeyboardComponent resp
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = first key
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    ImageComponent lake_waitSin
      image [set every repeat] = $backDrop
      startVal [time (s)] = 0.0
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    ImageComponent boat_waitSin
      image = barco_peq.png
      pos = (0, -100)
      startVal [time (s)] = 0
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    TextComponent wait_Sin_header
      letterHeight = 22
      pos = (-160, 280)
      startVal [time (s)] = 0.0
      text [set every frame] = $"FISH {} \t\t SUNSET IN {:02d}'{:02d}''".format(totalFish,int(timeLeft/60),int(timeLeft%60))
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  Routine delay
    CodeComponent delay_boat
      Code Type = Py
      Begin Routine:
        if resp.keys == 'left':
            boatOri = -30
            imgRod = 'fishing_rodL.png'
        elif resp.keys == 'right':
            boatOri = 30
            imgRod = 'fishing_rodR.png'
      Each Frame:
        timeLeft = max(0,sessDur-globalClock.getTime())
      End Routine:
        if key_resp.keys != 'space' and resp.keys in corrAns:#stored on last run routine
          if resp.keys == 'left':
            baitL = False
          if resp.keys == 'right':
            baitR = False
          totalFish+=1
          feedbackDwell = .35
          img_fish = np.random.choice(['fish_01.jpg','fish_02.jpg','fish_03.jpg','fish_04.png',
                                       'fish_05.jpg','fish_06.png','fish_07.jpg','fish_08.jpg'])
        else:
          feedbackDwell = 0
          img_fish = None

        timeLeft = sessDur-globalClock.getTime()
        if timeLeft/sessDur > 0.75:
            backDrop = "lake_01.jpg"
        elif timeLeft/sessDur > 0.5:
            backDrop = "lake_02.jpg"
        elif timeLeft/sessDur > 0.25:
            backDrop = "lake_03.jpg"
        elif timeLeft/sessDur > 0:
            backDrop = "lake_04.jpg"
        else:
            backDrop = "lake_05.jpg"
            trials.finished=True
            blocks.finished=True
    ImageComponent lake_delay
      image [set every repeat] = $backDrop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDelay
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    ImageComponent boat_delay
      disabled = True
      image = barco_peq.png
      ori [set every repeat] = boatOri
      pos = (0, -100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDelay
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDelay
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    TextComponent delay_header
      letterHeight = 22
      pos = (-160, 280)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDelay
      text [set every frame] = $"FISH {} \t\t SUNSET IN {:02d}'{:02d}''".format(totalFish,int(timeLeft/60),int(timeLeft%60))
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    ImageComponent rod
      image [set every repeat] = $imgRod
      pos = (0, -100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $feedbackDelay
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Flow
  Routine instrPractice
  Routine varsInit
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 1
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    Routine varsBlock
    LoopInitiator trials loopType="TrialHandler"
      endPoints = [1, 2]
      loopType = random
      nReps = 100
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      Routine wait_Sin
      Routine delay
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
